"""
stdp - Synapse model for spike-timing dependent plasticity
#########################################################

Description
+++++++++++

stdp_synapse is a synapse with spike-timing dependent plasticity (as defined in [1]_). Here the weight dependence exponent can be set separately for potentiation and depression. Examples:

=================== ==== =============================
Multiplicative STDP [2]_ mu_plus = mu_minus = 1
Additive STDP       [3]_ mu_plus = mu_minus = 0
Guetig STDP         [1]_ mu_plus, mu_minus in [0, 1]
Van Rossum STDP     [4]_ mu_plus = 0 mu_minus = 1
=================== ==== =============================


References
++++++++++

.. [1] Guetig et al. (2003) Learning Input Correlations through Nonlinear
       Temporally Asymmetric Hebbian Plasticity. Journal of Neuroscience

.. [2] Rubin, J., Lee, D. and Sompolinsky, H. (2001). Equilibrium
       properties of temporally asymmetric Hebbian plasticity, PRL
       86,364-367

.. [3] Song, S., Miller, K. D. and Abbott, L. F. (2000). Competitive
       Hebbian learning through spike-timing-dependent synaptic
       plasticity,Nature Neuroscience 3:9,919--926

.. [4] van Rossum, M. C. W., Bi, G-Q and Turrigiano, G. G. (2000).
       Stable Hebbian learning from spike timing-dependent
       plasticity, Journal of Neuroscience, 20:23,8812--8821
"""
synapse stdp:
    state:
        w real = 1.    @nest::weight   # Synaptic weight
        pre_trace real = 0.
        post_trace real = 0.

    parameters:
        d ms = 1 ms  @nest::delay   # Synaptic transmission delay
        lambda real = .01
        tau_tr_pre ms = 20 ms
        tau_tr_post ms = 20 ms
        alpha real = 1
        mu_plus real = 1
        mu_minus real = 1
        Wmax real = 100.
        Wmin real = 0.
        
        ca_LTP uM = 1.0 uM        # Calcium threshold for LTP
        ca_LTD uM = 0.5 uM        # Calcium threshold for LTD

    equations:
        pre_trace' = -pre_trace / tau_tr_pre
        post_trace' = -post_trace / tau_tr_post

    input:
        pre_spikes <- spike
        post_spikes <- spike
        ca uM <- continuous  # Calcium concentration from post-synaptic neuron

    output:
        spike

    onReceive(post_spikes):
        print("Info: processing a postsynaptic spike at time t = {t}")
        post_trace += 1

        if ca > ca_LTP: # Update weight based on calcium level (the VDCC induced flux might be enough to induce effects)
            w += lambda_LTP * (Wmax - w)  # Potentiation
        elif ca > ca_LTD:
            w -= lambda_LTD * (w - Wmin)  # Depression

        w = max(Wmin, min(Wmax, w))  # Clamp weight within bounds

    onReceive(pre_spikes):
        print("Info: processing a presynaptic spike at time t = {t}")
        pre_trace += 1

        if ca > Ca_LTP: # Update weight based on calcium level
            w += lambda_LTP * (Wmax - w)  # LTP
        elif ca > Ca_LTD:
            w -= lambda_LTD * (w - Wmin)  # LTD

        w = max(Wmin, min(Wmax, w))  # Clamp weight within bounds
        deliver_spike(w, d)
